CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:40
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:29
    Single images count:0
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    Select the rule criteria:or (file does contain "_One_") (file does contain "_ONE_")
    Name to assign these images:A_NUCLEI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Two_") (file does contain "_TWO_")
    Name to assign these images:B_BTK
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Three_") (file does contain "_THREE_")
    Name to assign these images:C_DCLAMP
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Four_") (file does contain "_FOUR_")
    Name to assign these images:D_RORGT
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Five_") (file does contain "_FIVE_")
    Name to assign these images:E_PD1
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Six_") (file does contain "_SIX_")
    Name to assign these images:F_EOMES
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Seven_") (file does contain "_SEVEN_")
    Name to assign these images:G_PDL1
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Eight_") (file does contain "_EIGHT_")
    Name to assign these images:H_NKP46
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Nine_") (file does contain "_NINE_")
    Name to assign these images:I_ICOS
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Ten_") (file does contain "_TEN_")
    Name to assign these images:J_DCSIGN
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Eleven_") (file does contain "_ELEVEN_")
    Name to assign these images:K_GATA3
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twelve_") (file does contain "_TWELVE_")
    Name to assign these images:L_CSF1R
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Thirteen_") (file does contain "_THIRTEEN_")
    Name to assign these images:M_CD66B
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Fourteen_") (file does contain "_FOURTEEN_")
    Name to assign these images:N_CD3
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Fifteen_") (file does contain "_FIFTEEN_")
    Name to assign these images:O_CD45
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Sixteen_") (file does contain "_SIXTEEN_")
    Name to assign these images:P_CD8
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Seventeen_") (file does contain "_SEVENTEEN_")
    Name to assign these images:Q_TBET
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Eighteen_") (file does contain "_EIGHTEEN_")
    Name to assign these images:R_CD163
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Nineteen_") (file does contain "_NINETEEN_")
    Name to assign these images:S_GRANZYMEB
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twenty_") (file does contain "_TWENTY_")
    Name to assign these images:T_MHCII
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twentyone_") (file does contain "_TWENTYONE_")
    Name to assign these images:U_CD68
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twentytwo_") (file does contain "TWENTYTWO")
    Name to assign these images:V_CD20
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twentythree_") (file does contain "_TWENTYTHREE_")
    Name to assign these images:W_CD4
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twentyfour_") (file does contain "_TWENTYFOUR_")
    Name to assign these images:X_FOXP3
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twentyfive_") (file does contain "_TWENTYFIVE_")
    Name to assign these images:Y_KI67
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twentysix_") (file does contain "_TWENTYSIX_")
    Name to assign these images:Z_TRYPTASE
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twentyseven_") (file does contain "_TWENTYSEVEN_")
    Name to assign these images:ZA_SMA
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twentyeight_") (file does contain "_TWENTYEIGHT_")
    Name to assign these images:ZB_PANCK
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_Twentynine_") (file does contain "_TWENTYNINE_")
    Name to assign these images:ZC_P16
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:A_NUCLEI
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:No
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    Convert blue to gray?:No
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
UnmixColors:[module_num:6|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
    Stain count:1
    Select the input color image:B_BTK
    Name the output name:BTK_02
    Stain:AEC
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
UnmixColors:[module_num:7|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
    Stain count:1
    Select the input color image:B_BTK
    Name the output name:DCLAMP_03
    Stain:AEC
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
UnmixColors:[module_num:8|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
    Stain count:1
    Select the input color image:D_RORGT
    Name the output name:RORGT_04
    Stain:AEC
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
UnmixColors:[module_num:9|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
    Stain count:1
    Select the input color image:E_PD1
    Name the output name:PD1_05
    Stain:AEC
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
UnmixColors:[module_num:10|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
    Stain count:1
    Select the input color image:F_EOMES
    Name the output name:EOMES_06
    Stain:AEC
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
UnmixColors:[module_num:11|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
    Stain count:1
    Select the input color image:G_PDL1
    Name the output name:PDL1_07
    Stain:AEC
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
UnmixColors:[module_num:12|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
    Stain count:1
    Select the input color image:H_NKP46
    Name the output name:NKP46_08
    Stain:AEC
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
UnmixColors:[module_num:13|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
    Stain count:1
    Select the input color image:I_ICOS
    Name the output name:ICOS_09
    Stain:AEC
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
UnmixColors:[module_num:14|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
    Stain count:1
    Select the input color image:J_DCSIGN
    Name the output name:DCSIGN_10
    Stain:AEC
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
UnmixColors:[module_num:15|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
    Stain count:1
    Select the input color image:K_GATA3
    Name the output name:GATA3_11
    Stain:AEC
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
UnmixColors:[module_num:16|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
    Stain count:1
    Select the input color image:L_CSF1R
    Name the output name:CSF1R_12
    Stain:AEC
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
UnmixColors:[module_num:17|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
    Stain count:1
    Select the input color image:M_CD66B
    Name the output name:CD66B_13
    Stain:AEC
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
UnmixColors:[module_num:18|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
    Stain count:1
    Select the input color image:N_CD3
    Name the output name:CD3_14
    Stain:AEC
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
UnmixColors:[module_num:19|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
    Stain count:1
    Select the input color image:O_CD45
    Name the output name:CD45_15
    Stain:AEC
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
UnmixColors:[module_num:20|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
    Stain count:1
    Select the input color image:P_CD8
    Name the output name:CD8_16
    Stain:AEC
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
UnmixColors:[module_num:21|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
    Stain count:1
    Select the input color image:Q_TBET
    Name the output name:TBET_17
    Stain:AEC
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
UnmixColors:[module_num:22|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
    Stain count:1
    Select the input color image:R_CD163
    Name the output name:CD163_18
    Stain:AEC
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
UnmixColors:[module_num:23|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
    Stain count:1
    Select the input color image:S_GRANZYMEB
    Name the output name:GRANZYMEB_19
    Stain:AEC
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
UnmixColors:[module_num:24|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
    Stain count:1
    Select the input color image:T_MHCII
    Name the output name:MHCII_20
    Stain:AEC
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
UnmixColors:[module_num:25|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
    Stain count:1
    Select the input color image:U_CD68
    Name the output name:CD68_21
    Stain:AEC
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
UnmixColors:[module_num:26|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
    Stain count:1
    Select the input color image:V_CD20
    Name the output name:CD20_22
    Stain:AEC
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
UnmixColors:[module_num:27|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
    Stain count:1
    Select the input color image:W_CD4
    Name the output name:CD4_23
    Stain:AEC
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
UnmixColors:[module_num:28|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
    Stain count:1
    Select the input color image:X_FOXP3
    Name the output name:FOXP3_24
    Stain:AEC
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
UnmixColors:[module_num:29|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
    Stain count:1
    Select the input color image:Y_KI67
    Name the output name:KI67_25
    Stain:AEC
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
UnmixColors:[module_num:30|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
    Stain count:1
    Select the input color image:Z_TRYPTASE
    Name the output name:TRYPTASE_26
    Stain:AEC
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
UnmixColors:[module_num:31|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
    Stain count:1
    Select the input color image:ZA_SMA
    Name the output name:SMA_27
    Stain:AEC
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
UnmixColors:[module_num:32|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
    Stain count:1
    Select the input color image:ZB_PANCK
    Name the output name:PANCK_28
    Stain:AEC
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
UnmixColors:[module_num:33|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
    Stain count:1
    Select the input color image:ZC_P16
    Name the output name:P16_29
    Stain:AEC
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
Morph:[module_num:34|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
    Select the input image:OrigRed
    Name the output image:MorphGreen
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Diameter:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:35|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
    Select the input image:MorphGreen
    Name the primary objects to be identified:NucleiGreen
    Typical diameter of objects, in pixel units (Min,Max):9,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureObjectIntensity:[module_num:36|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
    Hidden:29
    Select an image to measure:BTK_02
    Select an image to measure:DCLAMP_03
    Select an image to measure:RORGT_04
    Select an image to measure:PD1_05
    Select an image to measure:EOMES_06
    Select an image to measure:PDL1_07
    Select an image to measure:NKP46_08
    Select an image to measure:ICOS_09
    Select an image to measure:DCSIGN_10
    Select an image to measure:GATA3_11
    Select an image to measure:CSF1R_12
    Select an image to measure:CD66B_13
    Select an image to measure:CD3_14
    Select an image to measure:CD45_15
    Select an image to measure:CD8_16
    Select an image to measure:TBET_17
    Select an image to measure:CD163_18
    Select an image to measure:GRANZYMEB_19
    Select an image to measure:MHCII_20
    Select an image to measure:CD68_21
    Select an image to measure:CD20_22
    Select an image to measure:CD4_23
    Select an image to measure:FOXP3_24
    Select an image to measure:KI67_25
    Select an image to measure:TRYPTASE_26
    Select an image to measure:SMA_27
    Select an image to measure:PANCK_28
    Select an image to measure:P16_29
    Select an image to measure:MorphGreen
    Select objects to measure:NucleiGreen

MeasureObjectSizeShape:[module_num:37|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
    Select objects to measure:NucleiGreen
    Calculate the Zernike features?:No

ConvertObjectsToImage:[module_num:38|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
    Select the input objects:NucleiGreen
    Name the output image:NucleiGreen
    Select the color format:uint16
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:NucleiGreen
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    Select method for constructing file names:Single name
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    Enter single file name:Temp-
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    Saved file format:tif
    Output file location:Default Output Folder|Desktop\\\\\\\\CellProfiler\\\\\\\\Takahiro\\\\\\\\Cases\\\\\\\\3\\\\\\\\Extracted1
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:40|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\\\\\\\CellProfiler\\\\\\\\Takahiro\\\\\\\\Cases\\\\\\\\3\\\\\\\\Extracted1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Experiment|Modification_Timestamp,Experiment|Run_Timestamp,Experiment|Pipeline_Pipeline,Experiment|CellProfiler_Version,Image|Count_NucleiGreen,Image|ModuleError_07UnmixColors,Image|ModuleError_32UnmixColors,Image|ModuleError_30UnmixColors,Image|ModuleError_03NamesAndTypes,Image|ModuleError_25UnmixColors,Image|ModuleError_19UnmixColors,Image|ModuleError_12UnmixColors,Image|ModuleError_31UnmixColors,Image|ModuleError_05ColorToGray,Image|ModuleError_11UnmixColors,Image|ModuleError_29UnmixColors,Image|ModuleError_15UnmixColors,Image|ModuleError_21UnmixColors,Image|ModuleError_14UnmixColors,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.cptoc
    Use the object name for the file name?:No
    Data to export:NucleiGreen
    Combine these object measurements with those of the previous object?:No
    File name:NucleiGreen.cpout
    Use the object name for the file name?:No
